OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)

Timeline generator => #0
  Lua Script = E:/Diss/Paradigm/timeline.lua
-> Sound Player "apple"
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = E:/Diss/Paradigm/wavs/apple_audio.wav
  Loop = false
#0 -> Sound Player "dog"
  PLAY trigger = OVTK_StimulationId_Label_02
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = E:/Diss/Paradigm/wavs/dog_audio.wav
  Loop = false
#0 -> Sound Player "pencil"
  PLAY trigger = OVTK_StimulationId_Label_03
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = E:/Diss/Paradigm/wavs/pencil_audio.wav
  Loop = false
#0 -> Display cue image
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = E:/Diss/Paradigm/imgs/apple_audio.jpg
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = E:/Diss/Paradigm/imgs/dog_audio.jpg
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = E:/Diss/Paradigm/imgs/pencil_audio.jpg
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = E:/Diss/Paradigm/imgs/apple_text.png
  Stimulation 4 = OVTK_StimulationId_Label_0A
  Cue Image 5 = E:/Diss/Paradigm/imgs/dog_text.png
  Stimulation 5 = OVTK_StimulationId_Label_0B
  Cue Image 6 = E:/Diss/Paradigm/imgs/pencil_text.png
  Stimulation 6 = OVTK_StimulationId_Label_0C
  Cue Image 7 = E:/Diss/Paradigm/imgs/apple_image.jpg
  Stimulation 7 = OVTK_StimulationId_Label_1A
  Cue Image 8 = E:/Diss/Paradigm/imgs/dog_image.jpg
  Stimulation 8 = OVTK_StimulationId_Label_1B
  Cue Image 9 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 9 = OVTK_StimulationId_Label_1C
  Cue Image 10 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 10 = OVTK_StimulationId_Label_DC
  Cue Image 11 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 11 = OVTK_StimulationId_Label_DA
  Cue Image 12 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 12 = OVTK_StimulationId_Label_DB
  Cue Image 13 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 13 = OVTK_StimulationId_Label_DD
  Cue Image 14 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 14 = OVTK_StimulationId_Label_DE
  Cue Image 15 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 15 = OVTK_StimulationId_Label_DF
  Cue Image 16 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 16 = OVTK_StimulationId_Label_23
  Cue Image 17 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 17 = OVTK_StimulationId_Label_21
  Cue Image 18 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 18 = OVTK_StimulationId_Label_12
  Cue Image 19 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 19 = OVTK_StimulationId_Label_13
  Cue Image 20 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 20 = OVTK_StimulationId_Label_14
  Cue Image 21 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 21 = OVTK_StimulationId_Label_15
  Cue Image 22 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 22 = OVTK_StimulationId_Number_16
  Cue Image 23 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 23 = OVTK_StimulationId_Label_17
  Cue Image 24 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 24 = OVTK_StimulationId_Label_18
  Cue Image 25 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 25 = OVTK_StimulationId_Label_19
  Cue Image 26 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 26 = OVTK_StimulationId_Label_22
  Cue Image 27 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 27 = OVTK_StimulationId_Label_1D
  Cue Image 28 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 28 = OVTK_StimulationId_Label_23
  Cue Image 29 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 29 = OVTK_StimulationId_Label_24
  Cue Image 30 = E:/Diss/Paradigm/imgs/dog_image.jpg
  Stimulation 30 = OVTK_StimulationId_Label_25
  Cue Image 31 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 31 = OVTK_StimulationId_Label_26
  Cue Image 32 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 32 = OVTK_StimulationId_Number_00
  Cue Image 33 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 33 = OVTK_StimulationId_Number_01
  Cue Image 34 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 34 = OVTK_StimulationId_Number_00
  Cue Image 35 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 35 = OVTK_StimulationId_Number_03
  Cue Image 36 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 36 = OVTK_StimulationId_Number_04
  Cue Image 37 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 37 = OVTK_GDF_VEP
  Cue Image 38 = E:/Diss/Paradigm/imgs/break_image.png
  Stimulation 38 = OVTK_StimulationId_Target
  Cue Image 39 = E:/Diss/Paradigm/imgs/speaking.png
  Stimulation 39 = OVTK_GDF_Tongue
  Cue Image 40 = E:/Diss/Paradigm/imgs/rest.png
  Stimulation 40 = OVTK_StimulationId_RestStart
Acquisition client => #5
  Acquisition server hostname = localhost
  Acquisition server port = 1024
#5.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input signal=#5.Signal stream, Input stimulations=#0 -> Stimulation based epoching "phoneme stimuli" => #7
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_00
Input stream=#7 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/stimuli.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#5.Signal stream, Input stimulations=#0 -> Stimulation based epoching "speaking1" => #9
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Tongue
Input stream=#9 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/speaking1.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#5.Signal stream, Input stimulations=#0 -> Stimulation based epoching "speaking2" => #11
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Tongue
Input stream=#11 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/speaking2.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#5.Signal stream, Input stimulations=#0 -> Stimulation based epoching "speaking3" => #13
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Tongue
Input stream=#13 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/speaking3.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#5.Signal stream, Input stimulations=#0 -> Stimulation based epoching "speaking4" => #15
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Tongue
Input stream=#15 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/speaking4.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#5.Signal stream, Input stimulations=#0 -> Stimulation based epoching "speaking5" => #17
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Tongue
Input stream=#17 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/speaking5.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#5.Signal stream, Input stimulations=#0 -> Stimulation based epoching "rest" => #19
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_RestStart
Input stream=#19 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/resting.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#5.Signal stream, Input stimulations=#0 -> Stimulation based epoching "break" => #21
  Epoch duration (in sec) = 60
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
Input stream=#21 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/break.csv
  Precision = 10
  Append data = false
  Only last matrix = false
